CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Channel_Name>[A-Z]{1}[a-z]{2,4})_(?P<Well>[A-H][0-9]{1,2})_(?P<Site>[0-9])_(?P<Plate>[0-9]{3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Actin")
    Name to assign these images:Actin
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Convert Actin images from RGB to Greyscale and only take the red channel which is the correct stained channel (e.g. give it a original name).', '', 'Common issue is that all of the channels (e.g. DAPI, GFP, Actin) all have breakthrough staining in the "green channel" from their original RGB format.']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
    Select the input image:Actin
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:GrayActin
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ColorToGray:[module_num:6|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notes:['Convert DAPI images from RGB to Greyscale and only take the blue channel which is the correct stained channel (e.g. give it a original name).']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
    Select the input image:DAPI
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:GrayDAPI
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
ColorToGray:[module_num:7|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notes:['Convert GFP images from RGB to Greyscale and only take the green channel which is the correct stained channel (e.g. give it a original name).']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
    Select the input image:GFP
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:GrayGFP
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
Crop:[module_num:8|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notes:['All "Crop" modules take the red (Actin), blue (DAPI), and green (GFP) channels from their respective RGB format and crop them all to be 1224 (W) x 850 (L).']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
    Select the input image:GrayActin
    Name the output image:CropActin
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,850
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    Remove empty rows and columns?:All
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
Crop:[module_num:9|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
    Select the input image:GrayDAPI
    Name the output image:CropDAPI
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,850
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    Remove empty rows and columns?:All
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
Crop:[module_num:10|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
    Select the input image:GrayGFP
    Name the output image:CropGFP
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,850
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    Remove empty rows and columns?:All
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
SaveImages:[module_num:11|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notes:['Save all cropped images as 8-bit .tiff files.']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
    Select the type of image to save:Image
    Select the image to save:CropActin
    Select method for constructing file names:From image filename
    Select image name for file prefix:Actin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|NF1_SchwannCell_data/0_download_data/NF1_Processed_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CropDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|NF1_SchwannCell_data/0_download_data/NF1_Processed_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CropGFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|NF1_SchwannCell_data/0_download_data/NF1_Processed_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
