CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-Z]{1}[0-9]{1,2})_01_(?P<Channel>[1-3]{1})_(?P<Site>[1-4]{1})_(?P<Stain>[A-Z]{3,4})_(?P<Plate>[0-9]{3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RunCellpose:[module_num:5|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notes:['The default is 15 for minimum size that is used in Cellpose function, but I have it turned off due to assuming it was turned off in the GUI. Can be defaulted back if needed.']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
    Select the input image:DAPI
    Expected object diameter:50
    Detection mode:cyto
    Name the output object:Nuclei
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:-1
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

RunCellpose:[module_num:6|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notes:['The default is 15 for minimum size that is used in Cellpose function, but I have it turned off due to assuming it was turned off in the GUI. Can be defaulted back if needed.']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
    Select the input image:RFP
    Expected object diameter:146
    Detection mode:cyto2
    Name the output object:Cells
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:DAPI
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:-1
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

IdentifyTertiaryObjects:[module_num:7|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notes:['Identifies cytoplasm from the cells and nuclei found from RunCellpose.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:8|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
    Select images to measure:DAPI, GFP, RFP
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:9|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notes:['Only one MeasureGranularity is needed as it will measure whole images by default and will add measuring objects if parameter is turned on.']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
    Select images to measure:DAPI, GFP, RFP
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:10|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notes:['Measure object intensity.']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
    Select images to measure:DAPI, GFP, RFP
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureImageIntensity:[module_num:11|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notes:['Measure whole image intensity. Can set to measure intensity within the objects which will aggregate the measurement for all objects in an image, but we are not doing that in this pipeline.']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
    Select images to measure:DAPI, GFP, RFP
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectNeighbors:[module_num:12|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notes:['Measure nuclei neighbors that are adjacent to each other.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:13|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notes:['Measure cell neighbors that are adjacent to each other.']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:14|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notes:['Measure object intensity distribution using center (x,y) coords for each object.']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
    Select images to measure:DAPI, GFP, RFP
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:15|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notes:['Measure object size and shape.']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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:16|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notes:['Measure texture for both images and objects.']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
    Select images to measure:DAPI, GFP, RFP
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToDatabase:[module_num:17|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|NF1_SchwannCell_data/CellProfiler_pipelines/Analysis_Output/Plate2_Output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:NF1_data.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells,Cytoplasm,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:NF1_data
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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